#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "ThermoScientific Cytomat Interface\\ThermoScientific Cytomat Interface.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace THERMOCYTOMATINTERFACECONTROLLER {
  variable _arrintModuleID[];
  function AgitationGetParameters( variable i_intDeviceNumber, variable & o_intAgitationFrequency, variable & o_intAgitationAmplitude ) variable ;
  function AgitationSetParameters( variable i_intDeviceNumber, variable i_intAgitationFrequency, variable i_intAgitationAmplitude ) variable ;
  function GetCytomatState( variable i_intDeviceNumber, variable & o_blnBusy, variable & o_blnReady, variable & o_blnWarning, variable & o_blnError, variable & o_blnHandler, variable & o_blnGate, variable & o_blnDoor, variable & o_blnTransfer ) variable ;
  function GetEnvironment( variable i_intDeviceNumber, variable & o_fltTemperatureNominal, variable & o_fltTemperatureActual, variable & o_fltHumidityNominal, variable & o_fltHumidityActual, variable & o_fltCO2Nominal, variable & o_fltCO2Actual, variable & o_fltO2Nominal, variable & o_fltO2Actual ) variable ;
  function GetLabwareIDs( variable i_intDeviceNumber, variable i_intStacker, variable i_blnWaitForFinish, variable & o_arrStrLabwareIDs[] ) variable ;
  function GetPlateByLabwareID( variable i_intDeviceNumber, variable i_strLabwareID, variable i_blnWaitForFinish ) variable ;
  function GetPlateByPosition( variable i_intDeviceNumber, variable i_intStacker, variable i_intLevel, variable i_blnWaitForFinish ) variable ;
  function Initialize( variable i_blnSimulationMode, variable i_intTraceLevel, variable i_blnExtendedTrace, variable i_intCOMPort, variable i_intCytomatType, variable i_intNumberOfDevices ) variable ;
  function InventoryScanFull( variable i_intDeviceNumber, variable i_blnWaitForFinish ) variable ;
  function InventoryScanPartial( variable i_intDeviceNumber, variable i_intStartStacker, variable i_intStopStacker, variable i_blnWaitForFinish ) variable ;
  function MoveTransferstation( variable i_intDeviceNumber, variable i_intPositionTransferStation, variable i_blnWaitForFinish ) variable ;
  function SendFirmwareCommand( variable i_intDeviceNumber, variable i_strCommand, variable i_blnWaitForFinish, variable & o_strResponse ) variable ;
  function SetEnvironment( variable i_intDeviceNumber, variable i_fltTemperatureNominal, variable i_fltHumidityNominal, variable i_fltCO2Nominal, variable i_fltO2Nominal ) variable ;
  function SetPitch( variable i_intDeviceNumber, variable i_intStacker, variable i_intPitch ) variable ;
  function StartStopAgitation( variable i_intDeviceNumber, variable i_blnStartStop ) variable ;
  function StorePlateByPosition( variable i_intDeviceNumber, variable i_intStacker, variable i_intLevel, variable i_blnWaitForFinish ) variable ;
  function Terminate(  ) void ;
  function TowerShakerGetParameters( variable i_intDeviceNumber, variable & o_intNumberOfToS, variable & o_intFrequencyToS1, variable & o_intFrequencyToS2, variable & o_intStatusToS1, variable & o_intStatusToS2 ) variable ;
  function TowerShakerOpenCloseClamp( variable i_intDeviceNumber, variable i_blnOpenClose, variable i_intStoragePosition ) variable ;
  function TowerShakerSetParameters( variable i_intDeviceNumber, variable i_intNumberOfToS, variable i_intFrequencyToS1, variable i_intFrequencyToS2, variable i_intStatusToS1, variable i_intStatusToS2 ) variable ;
  function TowerShakerStartStop( variable i_intDeviceNumber, variable i_blnStartStop, variable i_intStoragePosition ) variable ;
  function UpdateInventory( variable i_intDeviceNumber, variable i_intStartStacker, variable i_intStartLevel, variable i_intStopStacker, variable i_intStopLevel, variable i_intUpdatedStatus ) variable ;
  private function _Abstract(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Initialize( variable i_blnSimulationMode, variable i_intTraceLevel, variable i_blnExtendedTrace, variable i_intCOMPort, variable i_intCytomatType, variable i_intNumberOfDevices ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable _intModuleID;
    private variable intLoopCounterDevices;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    _arrintModuleID.SetSize(i_intNumberOfDevices);
    {
      for(intLoopCounterDevices = 0; intLoopCounterDevices < i_intNumberOfDevices;)
      {
        intLoopCounterDevices = intLoopCounterDevices + 1;
        blnReturnValue = ThermoScientific_Cytomat_Interface::Initialize(i_intCOMPort, i_intCytomatType, i_blnSimulationMode, _intModuleID);
        if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error during init");
          return (ASWGLOBAL::BOOL::FALSE);
        }
        blnReturnValue = ThermoScientific_Cytomat_Interface::SetTraceLevel(_intModuleID, i_intTraceLevel);
        if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while set trace level");
          return (ASWGLOBAL::BOOL::FALSE);
        }
        blnReturnValue = ThermoScientific_Cytomat_Interface::SetExtendedTrace(_intModuleID, i_blnExtendedTrace);
        if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while set extended trace level");
          return (ASWGLOBAL::BOOL::FALSE);
        }
        _arrintModuleID.SetAt(intLoopCounterDevices-1, _intModuleID);
        i_intCOMPort = i_intCOMPort + 1;
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Terminate(  ) void {
    private variable intLoopCounterDevices;
    private variable intNumberOfCytomatsConnected;
    private variable intModuleID;
    intNumberOfCytomatsConnected=_arrintModuleID.GetSize();
    {
      for(intLoopCounterDevices = 0; intLoopCounterDevices < intNumberOfCytomatsConnected;)
      {
        intLoopCounterDevices = intLoopCounterDevices + 1;
        intModuleID=_arrintModuleID.GetAt(intLoopCounterDevices-1);
        ThermoScientific_Cytomat_Interface::Terminate(intModuleID);
      }
    }
  }

  private function _Abstract(  ) void {
  }

  function AgitationGetParameters( variable i_intDeviceNumber, variable & o_intAgitationFrequency, variable & o_intAgitationAmplitude ) variable {
    private variable blnReturnValue;
    private variable strMethodName;
    private variable strFunctionName;
    o_intAgitationFrequency = 0;
    o_intAgitationAmplitude = 0;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::AgitationGetParameters(_arrintModuleID.ElementAt( i_intDeviceNumber -1), o_intAgitationFrequency, o_intAgitationAmplitude);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while get agitation parameters");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function AgitationSetParameters( variable i_intDeviceNumber, variable i_intAgitationFrequency, variable i_intAgitationAmplitude ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::AgitationGetParameters(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intAgitationFrequency, i_intAgitationAmplitude);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while set agitation parameters");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function StartStopAgitation( variable i_intDeviceNumber, variable i_blnStartStop ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    if (i_blnStartStop == ASWGLOBAL::BOOL::TRUE)
    {
      blnReturnValue = ThermoScientific_Cytomat_Interface::AgitationStart(_arrintModuleID.ElementAt( i_intDeviceNumber -1));
      if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while start agitation");
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    else
    {
      blnReturnValue = ThermoScientific_Cytomat_Interface::AgitationStop(_arrintModuleID.ElementAt( i_intDeviceNumber -1));
      if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while stop agitation");
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function GetCytomatState( variable i_intDeviceNumber, variable & o_blnBusy, variable & o_blnReady, variable & o_blnWarning, variable & o_blnError, variable & o_blnHandler, variable & o_blnGate, variable & o_blnDoor, variable & o_blnTransfer ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    o_blnBusy = 0;
    o_blnReady = 0;
    o_blnWarning = 0;
    o_blnError = 0;
    o_blnHandler = 0;
    o_blnGate = 0;
    o_blnDoor = 0;
    o_blnTransfer = 0;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::GetCytomatState(_arrintModuleID.ElementAt( i_intDeviceNumber -1), o_blnBusy, o_blnReady, o_blnWarning, o_blnError, o_blnHandler, o_blnGate, o_blnDoor, o_blnTransfer);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while get cytomat state");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function GetEnvironment( variable i_intDeviceNumber, variable & o_fltTemperatureNominal, variable & o_fltTemperatureActual, variable & o_fltHumidityNominal, variable & o_fltHumidityActual, variable & o_fltCO2Nominal, variable & o_fltCO2Actual, variable & o_fltO2Nominal, variable & o_fltO2Actual ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    o_fltTemperatureNominal = 0;
    o_fltTemperatureActual = 0;
    o_fltHumidityNominal = 0;
    o_fltHumidityActual = 0;
    o_fltCO2Nominal = 0;
    o_fltCO2Actual = 0;
    o_fltO2Nominal = 0;
    o_fltO2Actual = 0;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::GetEnvironment(_arrintModuleID.ElementAt( i_intDeviceNumber -1), o_fltTemperatureNominal, o_fltTemperatureActual, o_fltHumidityNominal, o_fltHumidityActual, o_fltCO2Nominal, o_fltCO2Actual, o_fltO2Nominal, o_fltO2Actual);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while get environment");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function GetLabwareIDs( variable i_intDeviceNumber, variable i_intStacker, variable i_blnWaitForFinish, variable & o_arrStrLabwareIDs[] ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::GetLabwareIDs(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intStacker, i_blnWaitForFinish, o_arrStrLabwareIDs);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while get labware IDs");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function GetPlateByLabwareID( variable i_intDeviceNumber, variable i_strLabwareID, variable i_blnWaitForFinish ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::GetPlateByLabwareID(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_strLabwareID, i_blnWaitForFinish);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while get plate by labware ID");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function GetPlateByPosition( variable i_intDeviceNumber, variable i_intStacker, variable i_intLevel, variable i_blnWaitForFinish ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::GetPlateByPosition(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intStacker, i_intLevel, i_blnWaitForFinish);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while get plate by position");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function InventoryScanFull( variable i_intDeviceNumber, variable i_blnWaitForFinish ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::InventoryScanFull(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_blnWaitForFinish);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while inventory scan full");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function InventoryScanPartial( variable i_intDeviceNumber, variable i_intStartStacker, variable i_intStopStacker, variable i_blnWaitForFinish ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::InventoryScanPartial(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intStartStacker, i_intStopStacker, i_blnWaitForFinish);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while inventory scan partial");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function SendFirmwareCommand( variable i_intDeviceNumber, variable i_strCommand, variable i_blnWaitForFinish, variable & o_strResponse ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    o_strResponse = 0;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::SendFirmwareCommand(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_strCommand, i_blnWaitForFinish, o_strResponse);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Send firmware command");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function SetEnvironment( variable i_intDeviceNumber, variable i_fltTemperatureNominal, variable i_fltHumidityNominal, variable i_fltCO2Nominal, variable i_fltO2Nominal ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::SetEnvironment(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_fltTemperatureNominal, i_fltHumidityNominal, i_fltCO2Nominal, i_fltO2Nominal);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while get environment");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function SetPitch( variable i_intDeviceNumber, variable i_intStacker, variable i_intPitch ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::SetPitch(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intStacker, i_intPitch);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while get environment");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function TowerShakerOpenCloseClamp( variable i_intDeviceNumber, variable i_blnOpenClose, variable i_intStoragePosition ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    if (i_blnOpenClose == ASWGLOBAL::BOOL::TRUE)
    {
      blnReturnValue = ThermoScientific_Cytomat_Interface::TowerShakerOpenClamp(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intStoragePosition);
      if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while open clamp");
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    else
    {
      blnReturnValue = ThermoScientific_Cytomat_Interface::TowerShakerCloseClamp(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intStoragePosition);
      if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while close clamp");
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function TowerShakerGetParameters( variable i_intDeviceNumber, variable & o_intNumberOfToS, variable & o_intFrequencyToS1, variable & o_intFrequencyToS2, variable & o_intStatusToS1, variable & o_intStatusToS2 ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    o_intNumberOfToS = 0;
    o_intFrequencyToS1 = 0;
    o_intFrequencyToS2 = 0;
    o_intStatusToS1 = 0;
    o_intStatusToS2 = 0;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::TowerShakerGetParameters(_arrintModuleID.ElementAt( i_intDeviceNumber -1), o_intNumberOfToS, o_intFrequencyToS1, o_intFrequencyToS2, o_intStatusToS1, o_intStatusToS2);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while get shaker parameters");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function TowerShakerSetParameters( variable i_intDeviceNumber, variable i_intNumberOfToS, variable i_intFrequencyToS1, variable i_intFrequencyToS2, variable i_intStatusToS1, variable i_intStatusToS2 ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::TowerShakerSetParameters(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intNumberOfToS, i_intFrequencyToS1, i_intFrequencyToS2, i_intStatusToS1, i_intStatusToS2);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while set shaker parameters");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function TowerShakerStartStop( variable i_intDeviceNumber, variable i_blnStartStop, variable i_intStoragePosition ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    if (i_blnStartStop == ASWGLOBAL::BOOL::TRUE)
    {
      blnReturnValue = ThermoScientific_Cytomat_Interface::TowerShakerStart(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intStoragePosition);
      if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while open clamp");
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    else
    {
      blnReturnValue = ThermoScientific_Cytomat_Interface::TowerShakerStop(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intStoragePosition);
      if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while close clamp");
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function StorePlateByPosition( variable i_intDeviceNumber, variable i_intStacker, variable i_intLevel, variable i_blnWaitForFinish ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::StorePlateByPosition(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intStacker, i_intLevel, i_blnWaitForFinish);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while store plate by position");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function UpdateInventory( variable i_intDeviceNumber, variable i_intStartStacker, variable i_intStartLevel, variable i_intStopStacker, variable i_intStopLevel, variable i_intUpdatedStatus ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::UpdateInventory(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intStartStacker, i_intStartLevel, i_intStopStacker, i_intStopLevel, i_intUpdatedStatus);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while update inventory");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function MoveTransferstation( variable i_intDeviceNumber, variable i_intPositionTransferStation, variable i_blnWaitForFinish ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    blnReturnValue = ThermoScientific_Cytomat_Interface::MoveTransferStation(_arrintModuleID.ElementAt( i_intDeviceNumber -1), i_intPositionTransferStation, i_blnWaitForFinish);
    if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Error while move transferstation");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }
} // library namespace
